CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:tem
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
HistogramMatching:[module_num:5|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enabled:False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
    Select the input image:tem
    Name the output image:HistogramMatching
    Is your image 3D?:No
    Use a frame within image as reference?:No
    Image to use as reference :tem
    Frame number:5

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:tem
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:1
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    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:tem
    Name the output image:CorrTEM
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

HistogramEqualization:[module_num:8|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
    Select the input image:CorrTEM
    Name the output image:HE_TEM
    Bins:256
    Mask:Leave blank
    Local:No
    Tile Size:50
    Clip limit:0.01
    Is your image 3D?:No
    Do framewise calculation?:No
    Tile Size (Z):5

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:HE_TEM
    Select method for constructing file names:From image filename
    Select image name for file prefix:tem
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_corrected
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|D:\\Imagens_usuarios\\Diego-Wagner\\TEM_processed
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    Save with lossless compression?:Yes

RescaleIntensity:[module_num:10|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enabled:False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
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
VarianceTransform:[module_num:11|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enabled:False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
    Name the output image:FilteredImage
    Calculate optimal window size to maximize image variance?:No
    Window size:5
    Window min:5
    Window max:50
