CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "3500x.tif")
    Name to assign these images:TEM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "mask.tif")
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    Name to assign these objects:mito
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureObjectSizeShape:[module_num:5|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
    Select object sets to measure:mito
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:6|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
    Select the objects to filter:mito
    Name the output objects:FilterMito
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:500
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:FilterMito
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureGranularity:[module_num:8|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
    Select images to measure:TEM
    Measure within objects?:Yes
    Select objects to measure:FilterMito
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:TEM
    Select objects to measure:FilterMito

MeasureTexture:[module_num:10|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
    Select images to measure:TEM
    Select objects to measure:FilterMito
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

OverlayObjects:[module_num:11|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
    Input:TEM
    Name the output image:OverlayObjects
    Objects:FilterMito
    Opacity:0.3

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:TEM
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:overlay
    Saved file format:png
    Output file location:Elsewhere...|D:\\mito
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|D:\\mito
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FilterMito|Texture_InfoMeas2_TEM_3_02_256,FilterMito|Texture_InfoMeas2_TEM_3_01_256,FilterMito|Texture_InfoMeas2_TEM_3_00_256,FilterMito|Texture_InfoMeas2_TEM_3_03_256,FilterMito|Texture_DifferenceVariance_TEM_3_03_256,FilterMito|Texture_DifferenceVariance_TEM_3_02_256,FilterMito|Texture_DifferenceVariance_TEM_3_01_256,FilterMito|Texture_DifferenceVariance_TEM_3_00_256,FilterMito|Texture_Variance_TEM_3_01_256,FilterMito|Texture_Variance_TEM_3_00_256,FilterMito|Texture_Variance_TEM_3_02_256,FilterMito|Texture_Variance_TEM_3_03_256,FilterMito|Texture_SumAverage_TEM_3_03_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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